<PlusConfiguration version="2.7">
  <DataCollection StartupDelaySec="1.0">
    <DeviceSet
      Name="PlusServer: Suturing"
      Description="Broadcasting tracking data through OpenIGTLink."
    />
    <Device
      Id="TrackerDevice"
      Type="OptiTrack"
      ToolReferenceFrame="Tracker" 
      Profile="/Rigid_Bodies.motive"
      Calibration="OptiTrack/SampleCalibration.cal"
      AttachToRunningMotive="TRUE"
      MotiveDataDescriptionsUpdateTimeSec="1.0" >
      <DataSources>
        <DataSource Type="Tool" Id="Driver" />
		<DataSource Type="Tool" Id="Forcep" />
		<DataSource Type="Tool" Id="Reference" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
        <DataSource Type="Tool" Id="Driver" />
		<DataSource Type="Tool" Id="Forcep" />
		<DataSource Type="Tool" Id="Reference" />
        </OutputChannel>
      </OutputChannels>
    </Device>
  </DataCollection>
  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="TRUE"
    OutputChannelId="TrackerStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="DriverToReference" />
		<Transform Name="ForcepToReference" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>